CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:403
GitHash:
ModuleCount:11
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:No filtering
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Site>[0-9][0-9]).lsm
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    Extract metadata from:Images matching a rule
    Select the filtering criteria:and (file does contain "tif")
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:RawImage
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
EnhanceOrSuppressFeatures:[module_num:5|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
    Select the input image:RawImage
    Name the output image:EnhanceBigMediumParticles
    Select the operation:Enhance
    Feature size:5
    Feature type:Dark holes
    Range of hole sizes:15,200
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
IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:EnhanceBigMediumParticles
    Name the primary objects to be identified:ParticleBigMedium
    Typical diameter of objects, in pixel units (Min,Max):15,200
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:11
    Threshold strategy:Adaptive
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    Threshold smoothing scale:3
    Threshold correction factor:0.8
    Lower and upper bounds on threshold:0.0,1.0
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    Size of adaptive window:500
    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
    Thresholding method:Robust Background

EnhanceOrSuppressFeatures:[module_num:7|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
    Select the input image:RawImage
    Name the output image:EnhanceSmallParticles
    Select the operation:Enhance
    Feature size:10
    Feature type:Dark holes
    Range of hole sizes:2,10
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
MaskImage:[module_num:8|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
    Select the input image:EnhanceSmallParticles
    Name the output image:MaskedEnhanceSmallParticles
    Use objects or an image as a mask?:Objects
    Select object for mask:ParticleBigMedium
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    Invert the mask?:Yes

IdentifyPrimaryObjects:[module_num:9|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
    Select the input image:MaskedEnhanceSmallParticles
    Name the primary objects to be identified:ParticleSmall
    Typical diameter of objects, in pixel units (Min,Max):3,22
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:11
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:0.9
    Lower and upper bounds on threshold:0.0,1.0
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    Size of adaptive window:100
    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
    Thresholding method:Robust Background

MeasureObjectSizeShape:[module_num:10|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
    Select object sets to measure:ParticleBigMedium, ParticleSmall
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

ExportToSpreadsheet:[module_num:11|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|C:\\Users\\
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Image|ExecutionTime_06IdentifyPrimaryObjects,Image|ExecutionTime_07EnhanceOrSuppressFeatures,Image|ExecutionTime_04Groups,Image|ExecutionTime_10MeasureObjectSizeShape,Image|ExecutionTime_09IdentifyPrimaryObjects,Image|ExecutionTime_01Images,Image|ExecutionTime_02Metadata,Image|ExecutionTime_05EnhanceOrSuppressFeatures,Image|ExecutionTime_03NamesAndTypes,Image|ExecutionTime_08MaskImage,Image|ModuleError_05EnhanceOrSuppressFeatures,Image|ModuleError_08MaskImage,Image|ModuleError_03NamesAndTypes,Image|ModuleError_10MeasureObjectSizeShape,Image|ModuleError_02Metadata,Image|ModuleError_01Images,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
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